PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = visual-search_exp1
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Routines
  Routine trial1
    CodeComponent code
      Code Type = Py
      Begin Routine:
        ## INSERT MY OWN CODE
        import psychopy
      Each Frame:
        line = psychopy.visual.Line(
        win = win,
        units='pix',
        lineColor=[-1, -1, -1]
        )

        line.start = [-200, -200]
        line.end = [200, 200]

        line.draw()
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial2
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial1
